PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['dots.js']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 960]
  expName = duration_reproduction
  keyboardBackend = ioHub
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Routines
  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_9
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine M1
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    PolygonComponent BKG_1
      fillColor = $[-0.5,-0.5,-0.5]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent Fixation_1
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent Mask
      Code Type = JS
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      Begin JS Routine:
        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;

          // Create the RDK
          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            direction: 0.5,
            coherence: 0.5,
            dotColor: "rgb(7, 193, 7)",
            nDots: 300,
            speed: 1.5,
            dotSize: 2,
          });
        }
        // Start time and duration
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(TimeDur) * 1000;  // ms
        window.rdkRunning = true;
      Each JS Frame:
        if (window.rdkRunning && window.rdk) {
          // Update the RDK every frame
          window.rdk.updateAndDraw();

          // Stop once the duration has elapsed
          const elapsed = performance.now() - window.rdkStart;
          if (elapsed >= window.rdkDuration) {
            window.rdkRunning = false;
            continueRoutine = false;
          }
        } else {
          // RDK was not created
          console.warn("RDK is not initialised or has already stopped.");
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
        }
        window.rdk = null;
  Routine D
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    PolygonComponent BKG_2
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    DotsComponent dots
      coherence = 1
      color = -1.0000, 0.0039, -1.0000
      dir = 90
      dotLife = 0
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 30
      nDots = 300
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.035
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = cm
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    PolygonComponent Fixation
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine M2
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    PolygonComponent BKG_3
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    PolygonComponent Fixation_3
      disabled = True
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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    CodeComponent Direction
      Code Type = JS
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      Begin JS Routine:
        let direction = window.trial_direction;

        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
          //  x_scale is  cm → norm，now cm → px
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;  // px/each cm
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;

        let fps = 120;
         //  setting your speed
        let speed = (3.5 * cm_to_px_x) / fps;

          //  RDK
          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            direction: direction,
            coherence: parseFloat(Coherence1),
            dotColor: "rgb(7, 193, 7)",
            nDots: 360,
            speed: speed ,
            dotSize: 0.03 * cm_to_px_x,      // dot radius, px
          fieldRadius: 3.5 * cm_to_px_x,  // aperture radius, px (7 cm diameter)
            noiseMode: "inertial"
          });
        }
        // Start time and duration
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(TimeDur) * 1000;  // ms
        window.rdkRunning = true;

        // Store the motion direction
        psychoJS.experiment.addData('direction', direction);
      Each JS Frame:
        if (window.rdkRunning && window.rdk) {
          // Update the RDK every frame
          window.rdk.updateAndDraw();

          // Stop once the duration has elapsed
          const elapsed = performance.now() - window.rdkStart;
          if (elapsed >= window.rdkDuration) {
            window.rdkRunning = false;
            continueRoutine = false;
          }
        } else {
          // RDK was not created
          console.warn("RDK is not initialised or has already stopped.");
        }
      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
  Routine Response
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    CodeComponent Direction_2
      Code Type = JS
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      Before JS Experiment:
        window.keyDuration_global = 9999;
      Begin JS Routine:
        // Reset key-press state
        Key_pressed = false;
        Key_release = false;
        pressStart = null;
        releaseTime = null;
        keyDuration = 9999;
        let direction = window.trial_direction;
        // Clear pending key events and focus the window
        if (typeof psychoJS !== 'undefined') {
          psychoJS.eventManager.clearEvents();
        }
        window.focus();

        // Pixels per cm, from the credit-card calibration
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;
        let fps = 120;
        let speed = (3.5 * cm_to_px_x) / fps;
        // Create the canvas and a static white RDK
        const root = document.getElementById("root") || document.body;
        if (!window.rdkCanvas) {
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;

          window.rdk = new RDK({
            canvasId: "canvas",
            type: "keypress",
            noiseMode: "inertial",
            direction: direction,
            coherence: parseFloat(Coherence1),
            nDots: 360,
            speed: 0, // static until the key is pressed
            dotSize: 0.03 * cm_to_px_x,
            fieldRadius: 3.5 * cm_to_px_x,
            dotColor: "white"
          });
        }

        window.rdkStart = performance.now();
        window.rdkDuration = 6000;
        window.rdkRunning = true;

        // Hold the down arrow: dots turn green and move until the key is released
        window.keyDownHandler = function(event) {
          if (event.key === "ArrowDown" && !Key_pressed) {
            Key_pressed = true;
            pressStart = performance.now();

            // Replace the white RDK with a moving green one
            window.rdk = new RDK({
              canvasId: "canvas",
              type: "keypress",
              noiseMode: "inertial",
              direction: direction,
              coherence: parseFloat(Coherence1),
              nDots: 360,
              speed: speed,
              dotSize: 0.03 * cm_to_px_x,
              fieldRadius: 3.5 * cm_to_px_x,
              dotColor: "rgb(7, 193, 7)"
            });

          }
        };

        window.keyUpHandler = function(event) {
          if (event.key === "ArrowDown" && Key_pressed && !Key_release) {
            Key_release = true;
            releaseTime = performance.now();
            keyDuration = releaseTime - pressStart;
            if (window.rdk) window.rdk.speed = 0;
          }
        };

        window.addEventListener("keydown", window.keyDownHandler);
        window.addEventListener("keyup", window.keyUpHandler);

        // Draw the first frame
        if (window.rdk && window.rdkRunning) {
          window.rdk.updateAndDraw(true);

          const elapsed = performance.now() - window.rdkStart;

          if (Key_release) {
            continueRoutine = false;
          }

          if (elapsed >= window.rdkDuration && !Key_release) {
            keyDuration = 9999;
            if (window.rdk) window.rdk.speed = 0;
            continueRoutine = false;
          }
        }
      Each JS Frame:
        // Update the RDK every frame
        if (window.rdk && window.rdkRunning) {
          window.rdk.updateAndDraw(true);

          const elapsed = performance.now() - window.rdkStart;

          if (Key_release) {
            continueRoutine = false;
          }

          if (elapsed >= window.rdkDuration && !Key_release) {
            keyDuration = 9999;
            if (window.rdk) window.rdk.speed = 0;
            continueRoutine = false;
          }
        }
      End JS Routine:
        // Remove the key listeners
        window.removeEventListener("keydown", window.keyDownHandler);
        window.removeEventListener("keyup", window.keyUpHandler);

        // Remove the canvas
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
        }
        window.rdk = null;

        // Save data
        psychoJS.experiment.addData("keyDuration", keyDuration);
        window.keyDuration_global = keyDuration;
    PolygonComponent BKG_4
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
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  Routine Cue
    RoutineSettingsComponent Cue
      stopVal [duration (s)] = 0.5
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    PolygonComponent BKG_8
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = T
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  Routine Intro
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    PolygonComponent BKG
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 999
      units = pix
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    ImageComponent Ins_image_2
      image = images/instructions.jpg
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (1.5, 1.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mask_2
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    PolygonComponent BKG_6
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
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    PolygonComponent Fixation_4
      fillColor = $[1,1,1]
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent Direction_3
      Code Type = JS
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      Begin JS Routine:
        const fps = 120;
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;
        let speed = (2 * cm_to_px_x) / fps;



        if (!window.rdkCanvas) {
          const root = document.getElementById("root");
          const canvas = document.createElement("canvas");
          canvas.id = "canvas";
          canvas.width = psychoJS.window.size[0];
          canvas.height = psychoJS.window.size[1];
          canvas.style.position = "absolute";
          canvas.style.top = "0";
          canvas.style.left = "0";
          canvas.style.zIndex = "10";
          canvas.style.backgroundColor = "transparent";
          root.appendChild(canvas);
          window.rdkCanvas = canvas;
          // Create the RDK
          // x_scale converts cm to norm units; convert it to pixels per cm
        let cm_to_px_x = psychoJS.window.size[0] * x_scale;  // px per cm
        let cm_to_px_y = psychoJS.window.size[1] * y_scale;



         window.rdk = new RDK({
          canvasId: "canvas",
          type: "mask",
          noiseMode: "walk",
          direction: 0,
          coherence: 0,
          nDots: 360,
          speed: speed,
          dotSize: 0.03 * cm_to_px_x,      // dot radius, px
          fieldRadius: 3.5 * cm_to_px_x,  // aperture radius, px (7 cm diameter)
          dotColor: "white"
        });

        }
        // Start time and duration
        window.rdkStart = performance.now();
        window.rdkDuration = parseFloat(0.5) * 1000;  // ms
        window.rdkRunning = true;
      Each JS Frame:
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      End JS Routine:
        if (window.rdkCanvas) {
          window.rdkCanvas.remove();
          window.rdkCanvas = null;
          window.rdk = null;
        }
  Routine Feedback_Time
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    PolygonComponent BKG_7
      fillColor = $[-0.25,-0.25,-0.25]
      lineColor = $[-0.25,-0.25,-0.25]
      lineWidth = 5
      nVertices = 360
      saveStartStop = False
      shape = regular polygon...
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent Initial_Feedback_code_3
      Code Type = JS
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    CodeComponent Feedback_code_5
      Code Type = JS
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      Begin JS Experiment:
        PresentDur = 0.5;
        psychoJS.window.mouseVisible = false;

        // Start with all feedback circles white
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];
      Begin JS Routine:
        // Reproduced duration (ms) and target duration (s)
        let timeResp = window.keyDuration_global;
        let timeTarget = parseFloat(TimeDur);

        let feedbackID = 0;

        if (TrialType === "Time" && timeResp !== 9999) {
            let timeRespSec = timeResp / 1000;
            let diff = timeRespSec - timeTarget;
            let relErr = Math.abs(diff) / timeTarget;

            if (relErr <= 0.05) {
                feedbackID = 3; color_3 = [0, 0.9, 0.3];    // within +/-5%
            } else if (-diff / timeTarget >= 0.3) {
                feedbackID = 1; color_1 = [1, 0, 0];        // >= 30% too short
            } else if (diff / timeTarget >= 0.3) {
                feedbackID = 5; color_5 = [1, 0, 0];        // >= 30% too long
            } else if (diff / timeTarget >= 0.05) {
                feedbackID = 4; color_4 = [1, 0.3, 0.4];    // 5-30% too long
            } else if (-diff / timeTarget >= 0.05) {
                feedbackID = 2; color_2 = [1, 0.3, 0.4];    // 5-30% too short
            }

        } else {
            feedbackID = 0;  // no response
        }

        psychoJS.experiment.addData("FeedbackID_T", feedbackID);
      End JS Routine:
        keyDuration = 10;
        Key_pressed = false;
        (Key_release === 0);
        color_1 = [1, 1, 1];
        color_2 = [1, 1, 1];
        color_3 = [1, 1, 1];
        color_4 = [1, 1, 1];
        color_5 = [1, 1, 1];

        psychoJS.eventManager.clearEvents({"eventType": "keyboard"});
    PolygonComponent feedback_1_T
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      lineWidth = 0.5
      nVertices = 3600
      pos = (-8*x_scale, 0)
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_2_T
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      lineWidth = 0.5
      nVertices = 3600
      pos = (-4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_3_T
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      lineWidth = 0.5
      nVertices = 3600
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_4_T
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      lineWidth = 0.5
      nVertices = 3600
      pos = (4*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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    PolygonComponent feedback_5_T
      fillColor [set every repeat] = $color_5
      lineColor [set every repeat] = $color_5
      lineWidth = 0.5
      nVertices = 3600
      pos = (8*x_scale, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (2*x_scale, 2*x_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = $PresentDur
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  Routine block
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    CodeComponent Block_code_2
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
      Begin JS Routine:
        psychoJS.window.mouseVisible = false;

        // Random motion direction for this trial (degrees)
        window.trial_direction = Math.floor(Math.random() * 360);

        const blockSize = 54;
        const Practice_num = 1;
        const Block_num = Math.ceil(trials.nTotal / blockSize);

        let trialNumber = trials.thisN;  // position in the (randomised) trial order


        // Block index (from 0) and trial index within the block
        let Block_id = Math.floor(trialNumber / blockSize);
        let trial_in_block = trialNumber % blockSize;

        // Record Block_id on every trial
        psychoJS.experiment.addData("Block_id", Block_id);

        // Show the block message only on the first trial of a block; otherwise skip this routine
        if (trial_in_block === 0) {
            if (Block_id < Practice_num) {
                Block_text = " Practice will start. Please press 'S' to continue.";
            } else {
                Block_text = `Block (${Block_id - Practice_num + 1} / ${Block_num - Practice_num}) will start. Please press 'S' to continue.`;
            }

        } else {
            Block_text = "false";
            continueRoutine = false;
        }
    TextComponent Block_t_2
      color = black
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Block_text
      units = norm
      wrapWidth = 1600
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    KeyboardComponent Block_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Scale_setup
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        document.body.style.cursor = "none";

        show_keys = 0;
        show_touch = 0;
        if ((expInfo["device type"] === "Touch screen")) {
            show_touch = 1;
        } else {
            show_keys = 1;
        }
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
  Routine screen_scale_keys
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    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.window.mouseVisible = false;
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = images/credit-card.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine rectangel_keys
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    TextComponent rectangle_text_keys
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue.
    PolygonComponent polygon_keys
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_keys
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = JS
  Routine screen_scale_touch
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    CodeComponent code_scale_touch
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
        text_bottom_touch_text = ' '
      Each Frame:
        click = mouse.clicked_name

        if len(click):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if mouse.isPressedIn(continue_button) and t > 1:
                continueRoutine=False
            elif mouse.isPressedIn(tri_up):
                y_scale=round((y_scale+dscale)*10000)/10000
            elif mouse.isPressedIn(tri_down):
                y_scale=round((y_scale-dscale)*10000)/10000
            elif mouse.isPressedIn(tri_left):
                x_scale=round((x_scale-dscale)*10000)/10000
            elif mouse.isPressedIn(tri_right):
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom_touch_text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm'
            ccimage_touch.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top_touch
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card by clicking/tapping the arrows:
        Up = taller
        Down = shorter
        Left = narrower
        Right = wider
    PolygonComponent tri_up
      fillColor = white
      pos = (-0.55, 0.35)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_down
      fillColor = white
      ori = 180
      pos = (-0.55, 0.2)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_right
      fillColor = white
      ori = 90
      pos = (0.65, 0.3)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent tri_left
      fillColor = white
      ori = 270
      pos = (0.5, 0.3)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent ccimage_touch
      image = images/credit-card.png
      size [set every frame] = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = tri_up, tri_down, tri_left, tri_right
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent text_bottom_touch
      letterHeight = 0.05
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $text_bottom_touch_text
      units = norm
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    ImageComponent continue_button
      image = images/continue-button.png
      pos = (0.65, -0.45)
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      units = height
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  Routine retangle_touch
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    TextComponent rectangle_text_touch
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Click or touch here to continue.
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_end
      clickable = rectangle_text_touch
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine bye
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        🎉 Experiment Complete 🎉

        Thank you for participating in this experiment!

        Your responses have been successfully recorded.
        If you have any questions or feedback, feel free to contact the experimenter.

        Please press the **spacebar** to exit, or simply close this page.

        Wishing you a great day!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine exit
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results...
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    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        // === Save data to OSF via DataPipe (https://pipe.jspsych.org) ===
        // Replace the placeholder below with the experiment ID of your own
        // DataPipe experiment (see README).
        const DATAPIPE_EXPERIMENT_ID = 'YOUR_DATAPIPE_ID';

        // Do not offer the results file as a download in the participant's browser
        psychoJS._saveResults = false;

        const filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';
        const trialsData = psychoJS._experiment._trialsData;

        // Quote a value if it contains a comma, a quote or a line break
        function csvSafe(val) {
          if (val === undefined || val === null) return '';
          const str = val.toString();
          return /[",\r\n]/.test(str) ? '"' + str.replace(/"/g, '""') + '"' : str;
        }

        if (!trialsData || trialsData.length === 0) {
          console.warn('No trial data found; nothing to upload.');
          quitPsychoJS();
        } else {
          // Rows can have different columns, so collect every column name
          const headers = [];
          for (const row of trialsData)
            for (const key of Object.keys(row))
              if (!headers.includes(key)) headers.push(key);

          const csvContent = [headers.join(',')]
            .concat(trialsData.map(row => headers.map(h => csvSafe(row[h])).join(',')))
            .join('\n');

          console.log('Uploading data to DataPipe...');
          fetch('https://pipe.jspsych.org/api/data/', {
            method: 'POST',
            headers: {
              'Content-Type': 'application/json',
              'Accept': '*/*'
            },
            body: JSON.stringify({
              experimentID: DATAPIPE_EXPERIMENT_ID,
              filename: filename,
              data: csvContent
            })
          })
          .then(response => response.json())
          .then(result => {
            console.log('Upload finished:', result);
            quitPsychoJS();
          })
          .catch(error => {
            console.error('Upload failed:', error);
            quitPsychoJS();
          });
        }
Flow
  Routine Scale_setup
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = show_keys
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    Routine screen_scale_keys
    Routine rectangel_keys
  LoopTerminator trials_2
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TimeDur', 0.8), ('Coherence1', 0.3), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 0.9), ('Coherence1', 0.7), ('TrialType', 'Time')]),
      OrderedDict([('TimeDur', 1.0), ('Coherence1', 0.3), ('TrialType', 'Time')])]
    Routine block
    Routine ITI
    Routine Mask_2
    Routine M2
    Routine Mask_2
    Routine ITI
    Routine Cue
    Routine Response
    Routine Feedback_Time
  LoopTerminator trials
  Routine exit
